macro "Sesno-ify" {
	run("Clear Outside");
	run("Crop");
	roiManager("add");
	run("Make Binary");
	roiManager("Select", roiManager("count")-1); 
	run("Remove Outliers...", "radius=2 threshold=50 which=Bright");
	run("Remove Outliers...", "radius=2 threshold=50 which=Bright");
	roiManager("Rename", getTitle);

//divides current roi into left and right half 

        getSelectionBounds(x, y, width, height) 
        getRawStatistics(totalArea); 
        minOff = 1e9; 
        for (w=1; w < width; w++){ 
                roiManager("Select", roiManager("count")-1); 
                setKeyDown("alt"); 
                makeRectangle(x, y, w, height); 
                getRawStatistics(rightArea); 
                off = abs(2*rightArea - totalArea); 
                if (off < minOff){ 
                        minOff = off; 
                        xHalf = x + w; 
                        wHalf = w; 
                        halfArea = rightArea; 
                } 
        } 

        //Display result: 
        roiManager("Select", roiManager("count")-1); 
        setKeyDown("alt"); 
        makeRectangle(x, y, wHalf, height); 
        run("Copy");//work around 
        run("Add to Manager"); 
roiManager("Select", roiManager("count")-1); 
roiManager("Rename", getTitle + "_Right");
        //run("Measure"); 
        wait(500); 
        roiManager("Select", roiManager("count")-2); 
        setKeyDown("alt"); 
        makeRectangle(x+wHalf, y, width - wHalf, height); 
        run("Copy");//work around 
        run("Add to Manager");  
roiManager("Select", roiManager("count")-1); 
roiManager("Rename", getTitle + "_Left");

//get histogram

roiManager("Select", roiManager("count")-3); 
	getStatistics(area, mean, min, max, stddev, histogram);
	setResult("Skeletal", 0, histogram[255]);
	setResult("Void", 0, histogram[0]);
	setResult("Ratio", 0, histogram[255]/histogram[0]);
	updateResults();
	
roiManager("Select", roiManager("count")-2); 
	getStatistics(area, mean, min, max, stddev, histogram);
	setResult("Skeletal", 1, histogram[255]);
	setResult("Void", 1, histogram[0]);
	setResult("Ratio", 1, histogram[255]/histogram[0]);
	updateResults();
	
roiManager("Select", roiManager("count")-1); 
	getStatistics(area, mean, min, max, stddev, histogram);
	setResult("Skeletal", 2, histogram[255]);
	setResult("Void", 2, histogram[0]);
	setResult("Ratio", 2, histogram[255]/histogram[0]);
	updateResults();
	setResult("Label", 0, getTitle)
	setResult("Label", 1, getTitle + "_Right")
	setResult("Label", 2, getTitle + "_Left")


}
